#                                                          #
#                  TG186 Ir-192 source                     #
#                                                          #
#                                                          #
#                Latest version - May 2021                 #
#                Author: Francisco Berumen                 #
#              Contact - fberumenm@gmail.com               #
#       https://doi.org/10.1016/j.brachy.2020.12.007       #
#                                                          #

##### Materials ######
sv:Ma/CapsuleSteel/Components = 5 "Nickel" "Iron" "Manganese" "Chromium" "Silicon"#
uv:Ma/CapsuleSteel/Fractions  = 5 0.12 0.68 0.02 0.17 0.01
d:Ma/CapsuleSteel/Density     = 8.02 g/cm3

sv:Ma/CableSteel/Components = 5 "Nickel" "Iron" "Manganese" "Chromium" "Silicon"
uv:Ma/CableSteel/Fractions  = 5 0.12 0.68 0.02 0.17 0.01
d:Ma/CableSteel/Density     = 5.00 g/cm3

##### Radioactive source #####
s:Ge/ActiveCylinder/Type         = "TsCylinder"#放射源是一个圆柱体
s:Ge/ActiveCylinder/Material     = "G4_Ir"#圆柱体的材料，设置为 "G4_Ir"
s:Ge/ActiveCylinder/Parent       = "CapsuleCylinder"#放射源被放置在名为 CapsuleCylinder 的结构中
d:Ge/ActiveCylinder/RMin         = 0 mm#圆柱体的内半径为零。
d:Ge/ActiveCylinder/RMax         = 0.3 mm#圆柱体的外半径为 0.3 毫米
d:Ge/ActiveCylinder/HL           = 1.75 mm#圆柱体的高度为 1.75 毫米
d:Ge/ActiveCylinder/SPhi         = 0. deg#从角度 0° 开始
d:Ge/ActiveCylinder/DPhi         = 360. deg#圆柱体是完整的一圈（360°）。
d:Ge/ActiveCylinder/TransZ       = 0.4 mm#圆柱体的 Z 轴位置偏移了 0.4 毫米
s:Ge/ActiveCylinder/Color        = "White"
s:Ge/ActiveCylinder/DrawingStyle = "Solid"

s:So/Source/Type                      = "Volumetric"
s:So/Source/Component                 = "ActiveCylinder"#活动圆柱体
s:So/Source/ActiveMaterial            = "G4_Ir"
s:So/Source/BeamParticle              = "gamma"
i:So/Source/NumberOfHistoriesInRun    = 1000000
i:So/Source/MaxNumberOfPointsToSample = 1000000000
s:So/Source/BeamEnergySpectrumType    = "Discrete"

##### Rivard 2010 spectrum, NNDC, 10 keV cut ######
dv:So/Source/BeamEnergySpectrumValues = 39 61.486 63.0 65.122 66.831 71.079 71.414 73.363 75.368 75.749 77.831 110.4 136.3426 176.98 201.3112 205.79430 280.27 283.2668 295.95650 308.45507 316.50618 329.17 374.4852 416.4688 420.52 468.0688 484.5751 485.30 489.06 588.5810 593.49 599.41 604.41105 612.4621 703.87 765.8 884.5365 1061.48 1089.9 1378.20 keV

uv:So/Source/BeamEnergySpectrumWeightsUnscaled = 39 0.0120 0.0205 0.0263 0.0446 0.00241 0.00466 0.00163 0.00533 0.01025 0.00365 0.000122 0.0020 0.000043 0.00473 0.0334 0.00009 0.00266 0.2872 0.2968 0.8271 0.000174 0.00726 0.00669 0.00069 0.4781 0.03187 0.000023 0.00438 0.04517 0.000421 0.000039 0.0820 0.0534 0.000053 0.000013 0.00291 0.000530 0.000012 0.000012

uv:So/Source/BeamEnergySpectrumWeights = 0.43492973 * So/Source/BeamEnergySpectrumWeightsUnscaled

##### Group component, capsule and cable #####
s:Ge/Capsule/Type   = "Group"
s:Ge/Capsule/Parent = "World"

s:Ge/CapsuleCylinder/Type         = "TsCylinder"
s:Ge/CapsuleCylinder/Material     = "CapsuleSteel"
s:Ge/CapsuleCylinder/Parent       = "Capsule"
d:Ge/CapsuleCylinder/RMin         = 0 mm
d:Ge/CapsuleCylinder/RMax         = 0.5 mm
d:Ge/CapsuleCylinder/HL           = 2.25 mm
d:Ge/CapsuleCylinder/SPhi         = 0. deg
d:Ge/CapsuleCylinder/DPhi         = 360. deg
d:Ge/CapsuleCylinder/TransZ       = -0.4 mm
s:Ge/CapsuleCylinder/Color        = "shieldingcolor"
s:Ge/CapsuleCylinder/DrawingStyle = "Solid"

s:Ge/Capsulecap/Type         = "TsSphere"
s:Ge/Capsulecap/Material     = "CapsuleSteel"
s:Ge/Capsulecap/Parent       = "Capsule"
d:Ge/Capsulecap/RMin         = 0. mm
d:Ge/Capsulecap/RMax         = 0.5 mm
d:Ge/Capsulecap/SPhi         = 0. deg
d:Ge/Capsulecap/DPhi         = 360. deg
d:Ge/Capsulecap/STheta       = 0. deg
d:Ge/Capsulecap/DTheta       = 90. deg
d:Ge/Capsulecap/TransZ       = Ge/ActiveCylinder/HL + 0.1 mm
s:Ge/Capsulecap/DrawingStyle = "Solid"
s:Ge/Capsulecap/Color        = "shieldingcolor"

s:Ge/Cable/Type         = "TsCylinder"
s:Ge/Cable/Material     = "CableSteel"
s:Ge/Cable/Parent       = "Capsule"
d:Ge/Cable/RMin         = 0 mm
d:Ge/Cable/RMax         = 0.5 mm
d:Ge/Cable/HL           = 1.0 mm
d:Ge/Cable/SPhi         = 0. deg
d:Ge/Cable/DPhi         = 360. deg
d:Ge/Cable/TransZ       = -3.65 mm
s:Ge/Cable/Color        = "Green"
s:Ge/Cable/DrawingStyle = "Solid"

iv:Gr/Color/shieldingcolor = 4 255 255 255 80
